<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogInput">
          <mx:SignalSource />
          <mx:SampleRate>100</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>100</mx:BufferSize>
          <mx:SamplesPerChannel xsi:nil="true" />
          <mx:Channels>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName>asdf</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai8</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Nrse</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="mx:DigitalInput">
            <mx:SignalSource />
            <mx:SampleRate>100</mx:SampleRate>
            <mx:ActiveEdge>Rising</mx:ActiveEdge>
            <mx:SampleMode>FiniteSamples</mx:SampleMode>
            <mx:BufferSize>100</mx:BufferSize>
            <mx:SamplesPerChannel xsi:nil="true" />
            <mx:Channels>
              <mx:DigitalInputChannelConfiguration>
                <mx:ChannelName>test</mx:ChannelName>
                <mx:Grouping>OneChannelForEachLine</mx:Grouping>
                <mx:Lines>Dev2/port2/line7</mx:Lines>
              </mx:DigitalInputChannelConfiguration>
            </mx:Channels>
          </Combinator>
        </Builder>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>