<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>UpdateTrialNumber</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>rand1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Rand1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>rand2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Rand2</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitializeVars</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>Rand1</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>Rand2</rx:Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:\Users\petersa\Desktop\test.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SaveVars</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Rand1</Name>
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
              <MemberName>Name</MemberName>
              <Value>rand1</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Rand2</Name>
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
              <MemberName>Name</MemberName>
              <Value>rand2</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" />
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>SaveEvents</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialNumber</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>LogFormat</scr:Name>
                    <scr:Expression>new(
it.Item1 as Trial, 
it.Item2 as Event,
it.Item3 as Value,
it.Item4 as Timestamp
)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FileName" />
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>"C:\Users\petersa\Desktop\test.csv"</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>true</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>