<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p1="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>BonVision3ScreenRig</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>4</gl:Buffers>
                  <gl:Stereo>true</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:Texture2D">
                    <gl:Name>DynamicTexture</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Nearest</gl:MinFilter>
                    <gl:MagFilter>Nearest</gl:MagFilter>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-135</Left>
              <Right>135</Right>
              <Bottom>-45</Bottom>
              <Top>45</Top>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
              <FaceSize xsi:nil="true" />
              <ClearColor>Gray</ClearColor>
              <Width xsi:nil="true" />
              <Height xsi:nil="true" />
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>90</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>-10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>-10</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.333</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>-90</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.666</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PhotodiodeSquare</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" />
                      <Property Name="ColorG" />
                      <Property Name="ColorB" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>0.3</ExtentX>
                    <ExtentY>0.3</ExtentY>
                    <LocationX>0.5</LocationX>
                    <LocationY>-1</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>0</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="7" To="12" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitializeInputs</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>FlipPhotodiodeSquare</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>10</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimSize</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>60</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ReceptiveFieldMappingStim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="EndDelay" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="InitDelay" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="MappingTime" Description="!!! includes init delay" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT5S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>VisualNoiseStimuli</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Skip">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
                    <Angle>0</Angle>
                    <TextureName>DynamicTexture</TextureName>
                    <ExtentX>270</ExtentX>
                    <ExtentY>45</ExtentY>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <ScaleX>1</ScaleX>
                    <ScaleY>1</ScaleY>
                    <ShiftX>0</ShiftX>
                    <ShiftY>0</ShiftY>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Path" DisplayName="FileNameRFMapStim" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Rate" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>SparseNoise</Name>
                    <Description>Generates and draws a non-overlapping discrete sparse grid of randomly activated quads.</Description>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:UpdateFrame" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>TimeStep.ElapsedTime</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Duration" />
                          <Property Name="Rate" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="GridSize" />
                        </Expression>
                        <Expression xsi:type="PropertySource" TypeArguments="dsp:ConvertFromArray,p1:Size">
                          <MemberName>Size</MemberName>
                          <Value>
                            <Width>2</Width>
                            <Height>2</Height>
                          </Value>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Size" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="PropertySource" TypeArguments="dsp:ConvertFromArray,p1:Size">
                          <MemberName>Size</MemberName>
                          <Value>
                            <Width>2</Width>
                            <Height>2</Height>
                          </Value>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Rows" Selector="Height" />
                            <Property Name="Columns" Selector="Width" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="num:CreateRandom">
                            <num:Seed xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:SparseNoiseGenerator">
                            <p2:Rows>2</p2:Rows>
                            <p2:Columns>2</p2:Columns>
                            <p2:Duration>0.2</p2:Duration>
                            <p2:Rate>20</p2:Rate>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:ConvertFromArray">
                            <dsp:Size>
                              <dsp:Width>2</dsp:Width>
                              <dsp:Height>2</dsp:Height>
                            </dsp:Size>
                            <dsp:Depth xsi:nil="true" />
                            <dsp:Channels xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="9" Label="Source1" />
                        <Edge From="2" To="9" Label="Source4" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="3" To="6" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="10" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="9" Label="Source3" />
                        <Edge From="8" To="9" Label="Source2" />
                        <Edge From="9" To="10" Label="Source2" />
                        <Edge From="10" To="11" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:MatrixWriter">
                      <dsp:Path>C:\Users\petersa\Desktop\NoiseLocations.bin</dsp:Path>
                      <dsp:Suffix>None</dsp:Suffix>
                      <dsp:Overwrite>true</dsp:Overwrite>
                      <dsp:Layout>ColumnMajor</dsp:Layout>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:ConvertToImage" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateTexture">
                      <gl:TextureName>DynamicTexture</gl:TextureName>
                      <gl:TextureTarget>Texture2D</gl:TextureTarget>
                      <gl:InternalFormat>Rgba</gl:InternalFormat>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="MemberSelector">
                    <Selector>Step</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>FlipPhotodiodeSquare</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>FlipPhotodiodeSquare</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>DivideBy2</scr:Name>
                    <scr:Expression>it % 2</scr:Expression>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="6" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="6" To="10" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DelaySubscription">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="7" Label="Source2" />
            <Edge From="1" To="5" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="6" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:LastOrDefault" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>