<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetParameters</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
              <RangeMin>1</RangeMin>
              <RangeMax>2</RangeMax>
              <Count>11</Count>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>ITITimes</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
              <RangeMin>2</RangeMin>
              <RangeMax>4</RangeMax>
              <Count>21</Count>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>QuiescenceTimes</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>QuiescenceThreshold</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimSize</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimSpatialFreq</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>WheelControlDesk</Name>
        <Description>Arrow keys for wheel control at desk</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Right</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Left</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>0.1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>WheelControl</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BonVision3ScreenRig</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>4</gl:Buffers>
                  <gl:Stereo>true</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-135</Left>
              <Right>135</Right>
              <Bottom>-45</Bottom>
              <Top>45</Top>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
              <FaceSize xsi:nil="true" />
              <ClearColor>Gray</ClearColor>
              <Width xsi:nil="true" />
              <Height xsi:nil="true" />
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>90</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>-10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>-10</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.333</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>-90</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.666</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PhotodiodeSquare</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" />
                      <Property Name="ColorG" />
                      <Property Name="ColorB" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>0.3</ExtentX>
                    <ExtentY>0.3</ExtentY>
                    <LocationX>0.5</LocationX>
                    <LocationY>-1</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>1</ColorR>
                    <ColorG>1</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="6" To="11" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitializeVariables</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>TrialQuiescence</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>TrialITI</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>QuiescenceReset</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>TrialStart</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>ITIStart</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>QuiescenceStart</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>StimOn</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>Outcome</rx:Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>UpdateTrialNumber</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TrialStart</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>ITI</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialITI</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>MakeTimespan</scr:Name>
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1.4S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ITIStart</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PickTrialITI</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ITITimes</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:Permutation" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TrialITI</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>QuiescenceTimer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>QuiescenceReset</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialQuiescence</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>MakeTimespan</scr:Name>
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Throttle">
                <rx:DueTime>PT3.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>WheelControl</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Abs" />
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="SubscribeSubject">
              <Name>QuiescenceThreshold</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>QuiescenceReset</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PickTrialQuiescence</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>QuiescenceTimes</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:Permutation" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TrialQuiescence</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>QuiescenceStart</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="7" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="18" Label="Source1" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>InteractiveStim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>WheelControl</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>90</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>StimX</Name>
            </Expression>
            <Expression xsi:type="LessThanOrEqual">
              <Operand xsi:type="FloatProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>StimToCenter</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="FloatProperty">
                <Value>135</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>StimToPeriphery</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Amb" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>StimX</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimSize</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExtentX" />
                <Property Name="ExtentY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimSpatialFreq</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SpatialFrequency" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateDiscreteUniform">
                <p1:Lower>-180</p1:Lower>
                <p1:Upper>180</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Phase" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
              <LocationX>90</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <SpatialFrequency>0.1</SpatialFrequency>
              <TemporalFrequency>0</TemporalFrequency>
              <Phase>-6016.05664</Phase>
              <SquareWave>false</SquareWave>
              <Contrast>1</Contrast>
              <DutyCycle xsi:nil="true" />
              <Radius>1</Radius>
              <Aperture>0</Aperture>
              <Opacity>1</Opacity>
              <ExtentX>20</ExtentX>
              <ExtentY>20</ExtentY>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>PhotodiodeFlip</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:First" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StimOn</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="18" Label="Source1" />
            <Edge From="1" To="4" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="10" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="13" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="28" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="16" To="18" Label="Source2" />
            <Edge From="17" To="27" Label="Source2" />
            <Edge From="18" To="27" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="27" Label="Source3" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="27" Label="Source4" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source5" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Hit</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Reward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Outcome</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateClearColorState">
                <gl:ClearColor>ForestGreen</gl:ClearColor>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateClearColorState">
                <gl:ClearColor>Gray</gl:ClearColor>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Miss</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Punish</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Outcome</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateClearColorState">
                <gl:ClearColor>Brown</gl:ClearColor>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateClearColorState">
                <gl:ClearColor>Gray</gl:ClearColor>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:\Users\petersa\Desktop\test.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Saver</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:Int32,sys:String,sys:String,sys:DateTimeOffset)">
              <rx:Name>WriteData</rx:Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>SaveFormat</scr:Name>
              <scr:Expression>new(
it.Item1 as Trial, 
it.Item2 as Event,
it.Item3 as Value,
it.Item4 as Timestamp
)
</scr:Expression>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Users\petersa\Desktop\test.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>true</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SaveParameters</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ITITimes</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>QuiescenceTimes</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>QuiescenceThreshold</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimSize</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimSpatialFreq</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>ITITimes</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>QuiescenceTimes</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>QuiescenceThreshold</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>StimSize</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>StimSpatialFreq</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>WriteData</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="11" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="13" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="15" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="17" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="19" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="20" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="20" Label="Source2" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="20" Label="Source3" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="17" To="20" Label="Source4" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="20" Label="Source5" />
                  <Edge From="20" To="22" Label="Source1" />
                  <Edge From="21" To="22" Label="Source2" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SaveVariables</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialITI</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>TrialITI</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialQuiescence</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>TrialQuiescence</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>QuiescenceReset</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>QuiescenceReset</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimOn</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Outcome</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>StimOn</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>Outcome</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialStart</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ITIStart</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>QuiescenceStart</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>MakeString</scr:Name>
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>TrialStart</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>ITIStart</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject,sys:String">
                    <MemberName>Name</MemberName>
                    <Value>QuiescenceStart</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialNumber</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Item2,Value.Item1.Item2,Value.Item1.Item1,Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>WriteData</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="32" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="32" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="11" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="32" Label="Source3" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="17" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="19" Label="Source1" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="17" To="32" Label="Source4" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="32" Label="Source5" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="27" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="29" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="31" Label="Source1" />
                  <Edge From="26" To="27" Label="Source2" />
                  <Edge From="27" To="32" Label="Source6" />
                  <Edge From="28" To="29" Label="Source2" />
                  <Edge From="29" To="32" Label="Source7" />
                  <Edge From="30" To="31" Label="Source2" />
                  <Edge From="31" To="32" Label="Source8" />
                  <Edge From="32" To="34" Label="Source1" />
                  <Edge From="33" To="34" Label="Source2" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="10" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>