<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>WheelControlDesk</Name>
        <Description>Arrow keys for wheel control at desk</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Right</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Left</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>0.1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>WheelControl</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>BonVisionDesk</Name>
          <Description>BonVision for testing at desk</Description>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="gl:CreateWindow">
                  <gl:Width>200</gl:Width>
                  <gl:Height>200</gl:Height>
                  <gl:VSync>On</gl:VSync>
                  <gl:SwapSync>false</gl:SwapSync>
                  <gl:ClearColor>Gray</gl:ClearColor>
                  <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                  <gl:CursorVisible>true</gl:CursorVisible>
                  <gl:Location>
                    <gl:X>0</gl:X>
                    <gl:Y>0</gl:Y>
                  </gl:Location>
                  <gl:WindowBorder>Resizable</gl:WindowBorder>
                  <gl:WindowState>Normal</gl:WindowState>
                  <gl:DisplayDevice>Second</gl:DisplayDevice>
                  <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                  <gl:TargetUpdateFrequency xsi:nil="true" />
                  <gl:RenderState />
                  <gl:GraphicsMode>
                    <gl:ColorFormat>
                      <gl:Red>8</gl:Red>
                      <gl:Green>8</gl:Green>
                      <gl:Blue>8</gl:Blue>
                      <gl:Alpha>8</gl:Alpha>
                    </gl:ColorFormat>
                    <gl:Depth>16</gl:Depth>
                    <gl:Stencil>0</gl:Stencil>
                    <gl:Samples>0</gl:Samples>
                    <gl:AccumulatorFormat>
                      <gl:Red>0</gl:Red>
                      <gl:Green>0</gl:Green>
                      <gl:Blue>0</gl:Blue>
                      <gl:Alpha>0</gl:Alpha>
                    </gl:AccumulatorFormat>
                    <gl:Buffers>4</gl:Buffers>
                    <gl:Stereo>true</gl:Stereo>
                  </gl:GraphicsMode>
                </Combinator>
              </Expression>
              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="res:LoadResources" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="gl:RenderFrame" />
              </Expression>
              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>DrawStim</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
              <Expression xsi:type="GroupWorkflow">
                <Name>PhotodiodeSquare</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>PhotodiodeSquare</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:DistinctUntilChanged" />
                    </Expression>
                    <Expression xsi:type="scr:ExpressionTransform">
                      <scr:Name>Boolean2Int</scr:Name>
                      <scr:Expression>it ? 1 : 0</scr:Expression>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="ColorR" />
                        <Property Name="ColorG" />
                        <Property Name="ColorB" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                      <ExtentX>0.3</ExtentX>
                      <ExtentY>0.3</ExtentY>
                      <LocationX>1</LocationX>
                      <LocationY>-1</LocationY>
                      <Layer>0</Layer>
                      <Angle>0</Angle>
                      <ColorR>1</ColorR>
                      <ColorG>1</ColorG>
                      <ColorB>1</ColorB>
                      <ColorA>1</ColorA>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="BooleanProperty">
                        <Value>false</Value>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="rx:BehaviorSubject">
                      <Name>PhotodiodeSquare</Name>
                    </Expression>
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="5" Label="Source2" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="4" To="7" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BonVisionRig</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>200</gl:Width>
                <gl:Height>200</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location>
                  <gl:X>0</gl:X>
                  <gl:Y>0</gl:Y>
                </gl:Location>
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>4</gl:Buffers>
                  <gl:Stereo>true</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>DrawStim</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="GroupWorkflow">
              <Name>PhotodiodeSquare</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>Boolean2Int</scr:Name>
                    <scr:Expression>it ? 1 : 0</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" />
                      <Property Name="ColorG" />
                      <Property Name="ColorB" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>0.3</ExtentX>
                    <ExtentY>0.3</ExtentY>
                    <LocationX>1</LocationX>
                    <LocationY>-1</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>1</ColorR>
                    <ColorG>1</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="5" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StimProperties</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimSize</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>10</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StimFreq</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TaskTimings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ITILower</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>4</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ITIUpper</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>QuiescenceTimeLower</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>QuiescenceTimeUpper</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StartTrial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>ITI</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>PickTrialITI</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ITILower</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Lower" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ITIUpper</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Upper" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:CreateRandom">
                      <num:Seed xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateContinuousUniform">
                      <p1:Lower>2</p1:Lower>
                      <p1:Upper>4</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>Float2Time&amp;Round10ms</scr:Name>
                    <scr:Expression>TimeSpan.FromSeconds(Math.Round(it, Convert.ToInt32(1)))</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="5" Label="Source3" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT3.1S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>QuiescenceTimer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>QuiescenceReset</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>ResettingTimer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialQuiescence</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT1.8S</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Switch" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>WheelControl</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Abs" />
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>QuiescenceReset</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PickTrialQuiescence</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>QuiescenceTimeLower</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Lower" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>QuiescenceTimeUpper</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Upper" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:CreateRandom">
                      <num:Seed xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateContinuousUniform">
                      <p1:Lower>1</p1:Lower>
                      <p1:Upper>2</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>Float2Time&amp;Round10ms</scr:Name>
                    <scr:Expression>TimeSpan.FromSeconds(Math.Round(it, Convert.ToInt32(1)))</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="5" Label="Source3" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialQuiescence</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="14" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>InteractiveStim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStim</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>WheelControl</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>StimX</Name>
            </Expression>
            <Expression xsi:type="LessThanOrEqual">
              <Operand xsi:type="FloatProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>StimToCenter</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="FloatProperty">
                <Value>0.9</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>StimToPeriphery</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Amb" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:First" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>StimX</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimSize</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExtentX" />
                <Property Name="ExtentY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StimFreq</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SpatialFrequency" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateDiscreteUniform">
                <p1:Lower>-180</p1:Lower>
                <p1:Upper>180</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Phase" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
              <LocationX>0.5</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <SpatialFrequency>10</SpatialFrequency>
              <TemporalFrequency>0</TemporalFrequency>
              <Phase>9281.916</Phase>
              <SquareWave>false</SquareWave>
              <Contrast>1</Contrast>
              <DutyCycle xsi:nil="true" />
              <Radius>1</Radius>
              <Aperture>0</Aperture>
              <Opacity>1</Opacity>
              <ExtentX>0.3</ExtentX>
              <ExtentY>0.3</ExtentY>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>PhotodiodeFlip</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:First" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="18" Label="Source1" />
            <Edge From="1" To="4" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="10" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="13" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="28" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="16" To="18" Label="Source2" />
            <Edge From="17" To="27" Label="Source2" />
            <Edge From="18" To="27" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="27" Label="Source3" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="27" Label="Source4" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source5" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Hit</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Reward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateClearColorState">
                <gl:ClearColor>ForestGreen</gl:ClearColor>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateClearColorState">
                <gl:ClearColor>Gray</gl:ClearColor>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Miss</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Punish</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateClearColorState">
                <gl:ClearColor>Brown</gl:ClearColor>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateClearColorState">
                <gl:ClearColor>Gray</gl:ClearColor>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="11" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="13" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>