<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p1="clr-namespace:System.Drawing;assembly=System.Drawing"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location>
            <gl:X>0</gl:X>
            <gl:Y>0</gl:Y>
          </gl:Location>
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>DrawStimulus</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT1S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>MouseX</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Difference">
                <dsp:Order>1</dsp:Order>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Abs" />
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="DoubleProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>TrueCond</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateClearColorState">
          <gl:ClearColor>ForestGreen</gl:ClearColor>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>InteractiveStim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimulus</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MouseX</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
              <LocationX>0.99375</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <SpatialFrequency>10</SpatialFrequency>
              <TemporalFrequency>0</TemporalFrequency>
              <Phase>0</Phase>
              <SquareWave>false</SquareWave>
              <Contrast>1</Contrast>
              <DutyCycle xsi:nil="true" />
              <Radius>1</Radius>
              <Aperture>0</Aperture>
              <Opacity>1</Opacity>
              <ExtentX>0.5</ExtentX>
              <ExtentY>0.5</ExtentY>
            </Expression>
            <Expression xsi:type="LessThanOrEqual">
              <Operand xsi:type="FloatProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="5" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateClearColorState">
          <gl:ClearColor>Black</gl:ClearColor>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>FalseCond</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="gl:CreateWindow,p1:Color">
        <MemberName>ClearColor</MemberName>
        <Value />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateClearColorState">
          <gl:ClearColor>Brown</gl:ClearColor>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:MouseMove" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:NormalizedDeviceCoordinates" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>MouseX</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="14" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>